PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1620, 1620]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = NonCon
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        In this experiment you will see a series of faces, presented in pairs.

        The first face in each pair will be presented for only a fraction of a second and may be hard to see.

        You don't need to do anything but lay still and relax, but please pay attention because we may be asking you some questions about them later.
    KeyboardComponent instrKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine neutral
    ImageComponent image
      stopVal [duration (s)] = 0.150
      startEstim = .0167
      startVal [condition] = $noncon_image.status==FINISHED
      image [set every repeat] = $stimulus
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  Routine noncon
    ImageComponent noncon_image
      stopVal [duration (frames)] = 1
      startVal [frame N] = 0
      image [set every repeat] = $noncon
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  Routine blank
    StaticComponent space
      stopVal [duration (s)] = 1.083
      startVal [time (s)] = 0.0
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimulus_order.csv
    loopType = sequential
    nReps = 10
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    conditions:
      [{'stimulus': u'images/Neutral/2,1.png', 'noncon': u'images/Emotion/1,4.png'},
      {'stimulus': u'images/Neutral/6,1.png', 'noncon': u'images/Emotion/5,4.png'},
      {'stimulus': u'images/Neutral/4,1.png', 'noncon': u'images/Emotion/3,4.png'},
      {'stimulus': u'images/Neutral/7,1.png', 'noncon': u'images/Emotion/6,4.png'},
      {'stimulus': u'images/Neutral/5,1.png', 'noncon': u'images/Emotion/8,4.png'},
      {'stimulus': u'images/Neutral/8,1.png', 'noncon': u'images/Emotion/7,4.png'},
      {'stimulus': u'images/Neutral/3,1.png', 'noncon': u'images/Emotion/2,4.png'},
      {'stimulus': u'images/Neutral/1,1.png', 'noncon': u'images/Emotion/4,4.png'},
      {'stimulus': u'images/Neutral/3,1.png', 'noncon': u'images/Emotion/2,2.png'},
      {'stimulus': u'images/Neutral/5,1.png', 'noncon': u'images/Emotion/8,2.png'},
      {'stimulus': u'images/Neutral/8,1.png', 'noncon': u'images/Emotion/7,2.png'},
      {'stimulus': u'images/Neutral/4,1.png', 'noncon': u'images/Emotion/3,2.png'},
      {'stimulus': u'images/Neutral/1,1.png', 'noncon': u'images/Emotion/4,2.png'},
      {'stimulus': u'images/Neutral/2,1.png', 'noncon': u'images/Emotion/1,2.png'},
      {'stimulus': u'images/Neutral/7,1.png', 'noncon': u'images/Emotion/6,2.png'},
      {'stimulus': u'images/Neutral/6,1.png', 'noncon': u'images/Emotion/5,2.png'},
      {'stimulus': u'images/Neutral/2,1.png', 'noncon': u'images/Emotion/1,1.png'},
      {'stimulus': u'images/Neutral/8,1.png', 'noncon': u'images/Emotion/7,1.png'},
      {'stimulus': u'images/Neutral/7,1.png', 'noncon': u'images/Emotion/6,1.png'}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
    Routine blank
    Routine noncon
    Routine neutral
  LoopTerminator trials
